<PlusConfiguration version="2.3" PlusRevision="Plus-2.9.0.906c4bda (debug build) - Win64">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="fCal: Epiphan framegrabber +  Polhemus tracker (Probe, Reference, Stylus) UT MindRay" Description="Epiphan framegrabber image acquisition + Polhemus for tracking" />
    <Device Id="TrackerDevice" Type="Polhemus" ToolReferenceFrame="Tracker" FTTMode="0" LocalTimeOffsetSec="0.0893457">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" PortName="3" BufferSize="150" />
        <DataSource Type="Tool" Id="Reference" PortName="1" BufferSize="150" />
        <DataSource Type="Tool" Id="Stylus" PortName="2" BufferSize="150" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
      <Parameters />
    </Device>
    <Device Id="VideoDevice" Type="Epiphan" ClipRectangleOrigin="-1 -1" ClipRectangleSize="-1 -1">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" BufferSize="150" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
      <Parameters />
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
      <Parameters />
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        -0.0390835	0.1756	-0.011372	75.3741
        0.170489	0.0393064	-0.0142284	-80.6844
        -0.0111963	-0.0144448	-0.176962	17.8969
        0	0	0	1"
       Error="1.97965" Date="011926_192412" />
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1	0	0	-410
        0	1	0	5
        0	0	1	0
        0	0	0	1"
       Date="2011.12.06 17:57:00" />
    <Transform From="Phantom" To="Reference"
      Matrix="
        -0.0467002	0.998562	-0.0263077	-20.4084
        -0.0228578	-0.0273978	-0.999363	25.4178
        -0.998647	-0.0460691	0.0241045	150.134
        0	0	0	1"
       Error="1.17979" Date="011926_185417" />
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        -0.178407	-0.141637	-0.973709	-0.447222
        0.983626	0	-0.180224	-0.0827763
        0.0255263	-0.989919	0.139317	0.0639881
        0	0	0	1"
       Error="0.342577" Date="011926_184652" />
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.17527	0	0	0
        0	0.180524	0	0
        0	0	0.177897	0
        0	0	0	1"
       Date="011926_192413" />
  </CoordinateDefinitions>
  <Rendering WorldCoordinateFrame="Reference" DisplayedImageOrientation="MFA">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel" File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1	0	0	29.7
        0	-1	0	1.5
        0	0	1	-14
        0	0	0	1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject
      Id="PhantomModel"
      Type="Model"
      ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_L3.0.stl"
      ModelToObjectTransform="
        1	0	0	0
        0	1	0	0
        0	0	1	0
        0	0	0	1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage" />
  </Rendering>
  <Segmentation
    ApproximateSpacingMmPerPixel="0.192833"
    MorphologicalOpeningCircleRadiusMm="0.1"
    MorphologicalOpeningBarSizeMm="2"
    ClipRectangleOrigin="98 64"
    ClipRectangleSize="899 677"
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="8"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="0" />
  <PhantomDefinition>
    <Description Name="fCAL" Type="Multi-N" Version="3.0" WiringVersion="1.0" Institution="Queen&apos;s University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G6_g6" EndPointFront="20.0 0.0 -20.0" EndPointBack="20.0 40.0 -20.0" />
        <Wire Name="8:J6_g6" EndPointFront="50.0 0.0 -20.0" EndPointBack="20.0 40.0 -20.0" />
        <Wire Name="9:J6_j6" EndPointFront="50.0 0.0 -20.0" EndPointBack="50.0 40.0 -20.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G7_g7" EndPointFront="20.0 0.0 -30.0" EndPointBack="20.0 40.0 -30.0" />
        <Wire Name="5:G7_j7" EndPointFront="20.0 0.0 -30.0" EndPointBack="50.0 40.0 -30.0" />
        <Wire Name="6:J7_j7" EndPointFront="50.0 0.0 -30.0" EndPointBack="50.0 40.0 -30.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H8_h8" EndPointFront="30.0 0.0 -40.0" EndPointBack="30.0 40.0 -40.0" />
        <Wire Name="2:J8_h8" EndPointFront="50.0 0.0 -40.0" EndPointBack="30.0 40.0 -40.0" />
        <Wire Name="3:J8_j8" EndPointFront="50.0 0.0 -40.0" EndPointBack="50.0 40.0 -40.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="145.5 -5.0 15.5" />
        <Landmark Name="#2" Position="145.5 -5.0 -39.5" />
        <Landmark Name="#3" Position="145.1 -5.0 -114.5" />
        <Landmark Name="#4" Position="145.1 45.0 20.5" />
        <Landmark Name="#5" Position="145.1 45.0 -9.5" />
        <Landmark Name="#6" Position="145.1 45.0 -114.5" />
        <Landmark Name="#7" Position="-73.0 45.0 20.5" />
        <Landmark Name="#8" Position="-73.0 45.0 -9.5" />
        <Landmark Name="#9" Position="-73.0 45.0 -114.5" />
        <Landmark Name="#10" Position="-73.0 -5.0 20.5" />
        <Landmark Name="#11" Position="-73.0 -5.0 -39.5" />
        <Landmark Name="#12" Position="-73.4 -5.0 -104.5" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>
  <VolumeReconstruction
    OutputSpacing="1 1 1"
    ClipRectangleOrigin="98 64"
    ClipRectangleSize="899 677"
    Interpolation="LINEAR"
    Optimization="FULL"
    CompoundingMode="MEAN"
    FillHoles="OFF" />
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="400"
    NumberOfValidationImagesToAcquire="200"
    NumberOfStylusCalibrationPointsToAcquire="400"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream"
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream"
    FreeHandStartupDelaySec="5" />
  <vtkPlusPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip" />
  <vtkPlusPhantomLandmarkRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" DetectionTimeSec="1.0" StylusTipMaximumDisplacementThresholdMm="1.8" />
  <vtkPlusProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    OptimizationMethod="2D"
    IsotropicPixelSpacing="FALSE" />
  <vtkPlusTemporalCalibrationAlgo ClipRectangleOrigin="98 64" ClipRectangleSize="899 677" />
</PlusConfiguration>
