 <PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Epiphan video capture device"
      Description="Broadcasting acquired video through OpenIGTLink"
    />
    <Device
      Id="VideoDevice" 
      Type="Epiphan" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="50000" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
  <Segmentation
    ApproximateSpacingMmPerPixel="0.078"
    MorphologicalOpeningCircleRadiusMm="0.27"
    MorphologicalOpeningBarSizeMm="2.0"
    FanAnglesDeg="-45 45" 
    FanOriginPixel="380 20" 
    FanRadiusStartPixel="20" 
    FanRadiusStopPixel="160"
    ClipRectangleOrigin="27 27" 
    ClipRectangleSize="766 562" 
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10.0"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="FALSE"
    NumberOfMaximumFiducialPointCandidates="20"
  />  <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="2.0"
      WiringVersion="2.0"
      Institution="Queen's University PerkLab"
    />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0" />
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0" />
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0" />
        <Landmark Name="#2" Position="104.3 45.0 20.0" />
        <Landmark Name="#3" Position="104.3 45.0 0.0" />
        <Landmark Name="#4" Position="104.3 -5.0 0.0" />
        
        <Landmark Name="#5" Position="-34.3 45.0 15.0" />
        <Landmark Name="#6" Position="-34.3 -5.0 20.0" />
        <Landmark Name="#7" Position="-34.3 -5.0 0.0" />
        <Landmark Name="#8" Position="-34.3 45.0 0.0" />
      </Landmarks>      
      <Planes>
        <Plane Name="Superior" BasePoint="5.5 3.0 35.0" EndPoint1="135.0 3.0 35.0" EndPoint2="135.0 55.0 35.0" />
        <Plane Name="Inferior" BasePoint="5.5 55.0 0.0" EndPoint1="135.0 55.0 0.0" EndPoint2="135.0 5.5 0.0" />
        <Plane Name="Outside Unmarked" BasePoint="140.0 5.0 30.0" EndPoint1="140.0 50.0 30.0" EndPoint2="140.0 50.0 5.0" />
        <Plane Name="Inside Unmarked" BasePoint="125.0 40.0 30.0" EndPoint1="125.0 20.0 10.0" EndPoint2="125.0 40.0 10.0" />
        <Plane Name="Outside Marked" BasePoint="0.0 40.0 30.0" EndPoint1="0.0 40.0 5.5" EndPoint2="0.0 15.5 5.5" />
        <Plane Name="Outside Posterior" BasePoint="130.0 0.0 30.0" EndPoint1="20.0 0.0 30.0" EndPoint2="20.0 0.0 15.0" />
        <Plane Name="Inside Posterior" BasePoint="110.0 10.0 30.0" EndPoint1="40.0 10.0 30.0" EndPoint2="30.0 10.0 10.0" />
        <Plane Name="Outside Anterior" BasePoint="130.0 60.0 30.0" EndPoint1="20.0 60.0 30.0" EndPoint2="20.0 60.0 5.0" />
      </Planes>      
      <References>
        <Reference Name="#1" Position="104.3 5.0 20.0" />
        <Reference Name="#2" Position="104.3 45.0 20.0" />
        <Reference Name="#3" Position="104.3 45.0 0.0" />
        <Reference Name="#4" Position="104.3 -5.0 0.0" />
        <Reference Name="#5" Position="-34.3 45.0 15.0" />
        <Reference Name="#6" Position="-34.3 -5.0 20.0" />
        <Reference Name="#7" Position="-34.3 -5.0 0.0" />
        <Reference Name="#8" Position="-34.3 45.0 0.0" />
      </References>
    </Geometry>
  </PhantomDefinition>

</PlusConfiguration>
