<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Polhemus EM tracker"
      Description="Broadcasting tool tracking data through OpenIGTLink" 
    />
    <Device
      Id="TrackerDevice" 
      Type="Polhemus" 
      ToolReferenceFrame="Tracker" 
      Mode="PivotCalibration">
      <DataSources>
        <DataSource Type="Tool" Id="Reference" PortName="1"  />
        <DataSource Type="Tool" Id="Stylus" PortName="5"  />
        <DataSource Type="Tool" Id="Probe" PortName="2"  />
        <DataSource Type="Tool" Id="Phantom" PortName="6"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Reference"/>
          <DataSource Id="Stylus"/>
          <DataSource Id="Probe"/>
          <DataSource Id="Phantom"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
    
  <Rendering WorldCoordinateFrame="Tracker">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
  </Rendering>

  <fCal
    PhantomModelId="PhantomModel"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfStylusCalibrationPointsToAcquire="200"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    FixedChannelId="VideoStream" 
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackerStream" />

  <vtkPlusPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" />
    
      <vtkPlusPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" 
  />
  
  <vtkPhantomLinearObjectRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" 
  />

  <vtkPlusProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference" 
  />
  
   <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="1.0"
      WiringVersion="1.0"
      Institution="Queen's University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="1:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
        <Wire Name="2:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
        <Wire Name="3:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
        <Wire Name="5:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
        <Wire Name="6:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="ReferenceToTracker" />
        <Transform Name="StylusToTracker" />
        <Transform Name="ProbeToTracker" />
        <Transform Name="ImageToProbe" />

        <!-- <Transform Name="ReferenceToTracker" />
        <Transform Name="StylusToTracker" /> -->
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
