<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="fCal: Epiphan framegrabber + NDI Polaris tracker (Probe, Reference, Stylus)"
      Description="Epiphan framegrabber image acquisition + NDI Polaris for tracking" />


    <Device
      Id="TrackerDevice" 
      Type="Polhemus"
      ToolReferenceFrame="Tracker" >
         <DataSources>
        <DataSource Type="Tool" Id="Reference" PortName="2"  />
        <DataSource Type="Tool" Id="Stylus" PortName="3"  />
        <DataSource Type="Tool" Id="Probe" PortName="1"  />

      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Reference"/>
          <DataSource Id="Stylus"/>
          <DataSource Id="Probe"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    
    <Device
      Id="VideoDevice" 
      Type="V4L2Video"
      IOMethod=""
      DeviceName="/dev/video2" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" /> 
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
  </DataCollection>

  <Rendering WorldCoordinateFrame="Tracker">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject Type="Axes" ObjectCoordinateFrame="Reference" />
    <DisplayableObject Type="Axes" ObjectCoordinateFrame="Tracker" />
  
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="VideoStream"/>
    
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Phantom" Opacity="0.6" File="fCal_1.0.stl"
    ModelToObjectTransform="1 0 0 -15.0        0 1 0 10.0        0 0 1 -5.0        0 0 0 1" />
  </Rendering>

  <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="1.0"
      WiringVersion="1.0"
      Institution="Queen's University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="1:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
        <Wire Name="2:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
        <Wire Name="3:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
        <Wire Name="5:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
        <Wire Name="6:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>

  <fCal
     
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10" 
    FixedChannelId="VideoStream" 
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream" 
    FreeHandStartupDelaySec="5" 
  />
  
  <vtkPlusPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" />

  
  <vtkPlusPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip"  />

  
  <vtkPhantomLinearObjectRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" 
  />

  <vtkPlusProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference" 
  />
  
  <VolumeReconstruction OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
    Interpolation="LINEAR" Optimization="FULL" CompoundingMode="MEAN" FillHoles="OFF" />
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="ReferenceToTracker" />
        <Transform Name="StylusToTracker" />
        <Transform Name="ProbeToTracker" />
        

        <!-- <Transform Name="ReferenceToTracker" />
        <Transform Name="StylusToTracker" /> -->
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
