<PlusConfiguration version="2.3" PlusRevision="Plus-2.9.0.f42922c8 - Win64">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="fCal: Epiphan framegrabber +  Polhemus tracker (Probe, Reference, Stylus) - Calibrated" Description="Epiphan framegrabber image acquisition + Polhemus for tracking" />
    <Device Id="TrackerDevice" Type="Polhemus" LocalTimeOffsetSec="0.0" ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" PortName="5" />
        <DataSource Type="Tool" Id="Reference" PortName="2" />
        <DataSource Type="Tool" Id="Stylus" PortName="3" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device Id="VideoDevice" Type="Epiphan" ClipRectangleOrigin="-1 -1" ClipRectangleSize="-1 -1">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" BufferSize="150" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
      <Parameters />
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
      <Parameters />
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        -0.0207246	0.14768	0.0493885	-582.806
        0.244397	-0.0280924	-0.0377614	1997.87
        -0.0528684	0.0430819	-0.193922	102.631
        0	0	0	1"
       Error="6.21771" Date="051424_195831" />
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1	0	0	-410
        0	1	0	5
        0	0	1	0
        0	0	0	1"
       Date="2011.12.06 17:57:00" />
    <Transform From="Phantom" To="Reference"
      Matrix="
        0.217447	0.0690321	0.973628	-43.9591
        0.0314744	0.996481	-0.0776818	-27.8128
        -0.975565	0.0475361	0.214509	100.688
        0	0	0	1"
       Error="3.75469" Date="051424_194944" />
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        -0.0159575	-0.0526894	0.998483	179.297
        0.999872	0	0.0159797	2.86946
        -0.000841958	0.998611	0.0526827	9.46021
        0	0	0	1"
       Error="1.68422" Date="051424_194511" />
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.25787	0	0	0
        0	0.14461	0	0
        0	0	0.203644	0
        0	0	0	1"
       Date="051424_195832" />
  </CoordinateDefinitions>
  <Rendering WorldCoordinateFrame="Reference" DisplayedImageOrientation="MFA">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel" File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1	0	0	29.7
        0	-1	0	1.5
        0	0	1	-14
        0	0	0	1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject
      Id="PhantomModel"
      Type="Model"
      ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.0.stl"
      ModelToObjectTransform="
        1	0	0	-35
        0	1	0	-10
        0	0	1	-5
        0	0	0	1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage" />
  </Rendering>
  <Segmentation
    ApproximateSpacingMmPerPixel="0.145869"
    MorphologicalOpeningCircleRadiusMm="0.27"
    MorphologicalOpeningBarSizeMm="2"
    ClipRectangleOrigin="127 124"
    ClipRectangleSize="666 550"
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="0" />
  <PhantomDefinition>
    <Description Name="fCAL" Type="Multi-N" Version="2.0" WiringVersion="2.0" Institution="Queen&apos;s University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0" />
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0" />
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0" />
        <Landmark Name="#2" Position="104.3 45.0 20.0" />
        <Landmark Name="#3" Position="104.3 45.0 0.0" />
        <Landmark Name="#4" Position="104.3 -5.0 0.0" />
        <Landmark Name="#5" Position="-34.3 45.0 15.0" />
        <Landmark Name="#6" Position="-34.3 -5.0 20.0" />
        <Landmark Name="#7" Position="-34.3 -5.0 0.0" />
        <Landmark Name="#8" Position="-34.3 45.0 0.0" />
      </Landmarks>
      <Planes>
        <Plane Name="Superior" BasePoint="5.5 3.0 35.0" EndPoint1="135.0 3.0 35.0" EndPoint2="135.0 55.0 35.0" />
        <Plane Name="Inferior" BasePoint="5.5 55.0 0.0" EndPoint1="135.0 55.0 0.0" EndPoint2="135.0 5.5 0.0" />
        <Plane Name="Outside Unmarked" BasePoint="140.0 5.0 30.0" EndPoint1="140.0 50.0 30.0" EndPoint2="140.0 50.0 5.0" />
        <Plane Name="Inside Unmarked" BasePoint="125.0 40.0 30.0" EndPoint1="125.0 20.0 10.0" EndPoint2="125.0 40.0 10.0" />
        <Plane Name="Outside Marked" BasePoint="0.0 40.0 30.0" EndPoint1="0.0 40.0 5.5" EndPoint2="0.0 15.5 5.5" />
        <Plane Name="Outside Posterior" BasePoint="130.0 0.0 30.0" EndPoint1="20.0 0.0 30.0" EndPoint2="20.0 0.0 15.0" />
        <Plane Name="Inside Posterior" BasePoint="110.0 10.0 30.0" EndPoint1="40.0 10.0 30.0" EndPoint2="30.0 10.0 10.0" />
        <Plane Name="Outside Anterior" BasePoint="130.0 60.0 30.0" EndPoint1="20.0 60.0 30.0" EndPoint2="20.0 60.0 5.0" />
      </Planes>
      <References>
        <Reference Name="#1" Position="104.3 5.0 20.0" />
        <Reference Name="#2" Position="104.3 45.0 20.0" />
        <Reference Name="#3" Position="104.3 45.0 0.0" />
        <Reference Name="#4" Position="104.3 -5.0 0.0" />
        <Reference Name="#5" Position="-34.3 45.0 15.0" />
        <Reference Name="#6" Position="-34.3 -5.0 20.0" />
        <Reference Name="#7" Position="-34.3 -5.0 0.0" />
        <Reference Name="#8" Position="-34.3 45.0 0.0" />
      </References>
    </Geometry>
  </PhantomDefinition>
  <VolumeReconstruction
    OutputSpacing="2 2 2"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="820 616"
    Interpolation="LINEAR"
    Optimization="FULL"
    CompoundingMode="MEAN"
    FillHoles="OFF" />
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream"
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream"
    FreeHandStartupDelaySec="5" />
  <vtkPlusPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip" />
  <vtkPlusPhantomLandmarkRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" />
  <vtkPlusProbeCalibrationAlgo ImageCoordinateFrame="Image" ProbeCoordinateFrame="Probe" PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" />


  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18946"
    MissingInputGracePeriodSec="5.0"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackedVideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
      <TransformNames>
        <Transform Name="ProbeToReference" />
        <Transform Name="ReferenceToTracker" />
        <Transform Name="StylusToTracker" />
        <Transform Name="ProbeToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>


  <vtkPlusTemporalCalibrationAlgo ClipRectangleOrigin="127 124" ClipRectangleSize="666 550" />
</PlusConfiguration>
